CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Images
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Images
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Srrm2
    Convert green to gray?:Yes
    Name the output image:ExpRep
    Convert blue to gray?:Yes
    Name the output image:NucMask
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:NucMask
    Name the output object:NucObjects
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Srrm2
    Name the primary objects to be identified:NuclearSpeckles
    Typical diameter of objects, in pixel units (Min,Max):5,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:8|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
    Select objects to be masked:NuclearSpeckles
    Name the masked objects:MaskedSpeckles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucObjects
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.7
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:9|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
    Parent objects:NucObjects
    Child objects:MaskedSpeckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:ExpRep, Srrm2
    Select objects to measure:MaskedSpeckles, NucObjects

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:MaskedSpeckles, NucObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|WorkImages/20221130_NeveSRRM2ExpRep_2/cellprofiler_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ShapeIntensity_
    Overwrite existing files without warning?:No
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