CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "tif")
    Name to assign these images:Image
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "png")
    Name to assign these images:NucMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Image
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:TRA2B
    Convert green to gray?:Yes
    Name the output image:ER
    Convert blue to gray?:Yes
    Name the output image:smFISH
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:NucMask
    Name the output object:Nuclei
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:ER
    Name the primary objects to be identified:Speckle
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:200
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    Thresholding method:Otsu

MaskObjects:[module_num:8|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
    Select objects to be masked:Speckle
    Name the masked objects:MaskedSpeckles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the output objects:EnlargedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:40
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
MaskObjects:[module_num:10|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
    Select objects to be masked:EnlargedNuclei
    Name the masked objects:FakeCyto
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:11|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
    Select objects to be masked:Nuclei
    Name the masked objects:Nucleoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Speckle
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:12|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
    Select objects to be masked:Nuclei
    Name the masked objects:TotalSpeckle
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedSpeckles
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:13|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
    Parent objects:Nuclei
    Child objects:MaskedSpeckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:14|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
    Select images to measure:ER, TRA2B, smFISH
    Select objects to measure:FakeCyto, Nuclei, Nucleoplasm, TotalSpeckle

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:MaskedSpeckles, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|WorkImages/20250502_Neve_TRA2_KD_FISH/cellprofile_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:TotalSpeckle|Intensity_MeanIntensity_ER,TotalSpeckle|Intensity_MeanIntensity_TRA2B,TotalSpeckle|Intensity_MeanIntensity_smFISH,TotalSpeckle|Intensity_StdIntensity_smFISH,TotalSpeckle|Intensity_StdIntensity_ER,TotalSpeckle|Intensity_StdIntensity_TRA2B,TotalSpeckle|Intensity_IntegratedIntensity_ER,TotalSpeckle|Intensity_IntegratedIntensity_smFISH,TotalSpeckle|Intensity_IntegratedIntensity_TRA2B,TotalSpeckle|Intensity_MedianIntensity_smFISH,TotalSpeckle|Intensity_MedianIntensity_TRA2B,TotalSpeckle|Intensity_MedianIntensity_ER,TotalSpeckle|Number_Object_Number,TotalSpeckle|Parent_Nuclei,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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