CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (extension does istif)
    Name to assign these images:Images
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "masks")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Images
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:mGL
    Convert green to gray?:Yes
    Name the output image:TRA2B
    Convert blue to gray?:Yes
    Name the output image:SC35
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:Nuclei
    Name the output object:NucleiMasks
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:SC35
    Name the primary objects to be identified:NuclearSpeckles
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

RelateObjects:[module_num:8|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
    Parent objects:NucleiMasks
    Child objects:NuclearSpeckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:9|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
    Select objects to be masked:NucleiMasks
    Name the masked objects:Nucleoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NuclearSpeckles
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:10|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
    Select objects to be masked:NucleiMasks
    Name the masked objects:TotalSpeckles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NuclearSpeckles
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:PPIG, SC35, TRA2B, mGL
    Select objects to measure:NucleiMasks, Nucleoplasm, TotalSpeckles

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:NucleiMasks
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/cellprofile_analysis/20230612_LUC7L3_TRA2B/cellprofiler_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nucleoplasm|Intensity_StdIntensity_TRA2B,Nucleoplasm|Intensity_StdIntensity_SC35,Nucleoplasm|Intensity_StdIntensity_PPIG,Nucleoplasm|Intensity_StdIntensity_mGL,Nucleoplasm|Intensity_MeanIntensity_mGL,Nucleoplasm|Intensity_MeanIntensity_SC35,Nucleoplasm|Intensity_MeanIntensity_PPIG,Nucleoplasm|Intensity_MeanIntensity_TRA2B,Nucleoplasm|Intensity_MedianIntensity_mGL,Nucleoplasm|Intensity_MedianIntensity_SC35,Nucleoplasm|Intensity_MedianIntensity_PPIG,Nucleoplasm|Intensity_MedianIntensity_TRA2B,Nucleoplasm|Intensity_MinIntensity_PPIG,Nucleoplasm|Intensity_MinIntensity_SC35,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:Yes
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